CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample>.*)_(?P<Stain>(DAPI|STAT1)).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'DAPI': u'Sample', u'STAT1': u'Sample'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (metadata does Stain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Stain "STAT1")
    Name to assign these images:STAT1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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notes:['Threshold DAPI channel image for 3D watershed Object Identification', 'Use Minimum Cross Entropy method']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
    Select the input image:DAPI
    Name the output image:ImgDAPITh
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:4
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
SaveImages:[module_num:6|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notes:['Save Thresholded DAPI image']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
    Select the type of image to save:Image
    Select the image to save:ImgDAPITh
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OBJ
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Threshold:[module_num:7|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notes:['Threshold STAT1 channel', 'Use Robust Background method']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
    Select the input image:STAT1
    Name the output image:ImgSTAT1Th
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:4
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
SaveImages:[module_num:8|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notes:['Save thresholded STAT1 image']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
    Select the type of image to save:Image
    Select the image to save:ImgSTAT1Th
    Select method for constructing file names:From image filename
    Select image name for file prefix:STAT1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OBJ
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskImage:[module_num:9|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notes:['Mask thresholded STAT1 image with STAT1 threshold image', 'This will be used for measuring entire STAT1 image']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
    Select the input image:STAT1
    Name the output image:ImgSTAT1Selected
    Use objects or an image as a mask?:Image
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    Select image for mask:ImgSTAT1Th
    Invert the mask?:No

MaskImage:[module_num:10|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notes:['Mask thresholded STAT1 image with DAPI threshold image', 'This will be used for measuring STAT1 signal inside DAPI']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
    Select the input image:ImgSTAT1Selected
    Name the output image:ImgSTAT1MaskedDAPI
    Use objects or an image as a mask?:Image
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    Select image for mask:ImgDAPITh
    Invert the mask?:No

MaskImage:[module_num:11|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notes:['Mask thresholded STAT1 image with inverse of DAPI threshold image', 'This will be used for measuring STAT1 signal ousdie DAPI']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
    Select the input image:ImgSTAT1Selected
    Name the output image:ImgSTAT1MaskedDAPIOut
    Use objects or an image as a mask?:Image
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    Select image for mask:ImgDAPITh
    Invert the mask?:Yes

MeasureImageIntensity:[module_num:12|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notes:['Measure intensity', 'Measure following image intensity', 'Entire STAT1', 'STAT1 in DAPI region', 'STAT1 outside of DAPI region']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
    Select the image to measure:ImgSTAT1Selected
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:ImgSTAT1MaskedDAPI
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:ImgSTAT1MaskedDAPIOut
    Measure the intensity only from areas enclosed by objects?:No
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
CalculateMath:[module_num:13|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notes:['Calibrate total intensity of entire STAT1 signal', 'Multiply 65535 to match with original image intensity']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
    Name the output measurement:STAT1_Total
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_ImgSTAT1Selected
    Multiply the above operand by:65535
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:14|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notes:['Calibrate mean intensity of entire STAT1 signal', 'Multiply 65535 to match with original image intensity']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
    Name the output measurement:STAT1_Mean
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_ImgSTAT1Selected
    Multiply the above operand by:65535
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:15|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notes:['Calibrate total intensity of STAT1 signal in DAPI region', 'Multiply 65535 to match with original image intensity']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
    Name the output measurement:STAT1_TotalDAPI
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_ImgSTAT1MaskedDAPI
    Multiply the above operand by:65535
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:16|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notes:['Calibrate mean intensity of STAT1 signal in DAPI region', 'Multiply 65535 to match with original image intensity']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
    Name the output measurement:STAT1_MeanDAPI
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_ImgSTAT1MaskedDAPI
    Multiply the above operand by:65535
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:17|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notes:['Calibrate total intensity of STAT1 signal ouside of DAPI region', 'Multiply 65535 to match with original image intensity']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
    Name the output measurement:STAT1_TotalNonDAPI
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_TotalIntensity_ImgSTAT1MaskedDAPIOut
    Multiply the above operand by:65535
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:65535
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:18|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notes:['Calibrate mean intensity of STAT1 signal ouside of DAPI region', 'Multiply 65535 to match with original image intensity']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
    Name the output measurement:STAT1_MeanNonDAPI
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_ImgSTAT1MaskedDAPIOut
    Multiply the above operand by:65535
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:65535
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:19|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notes:['Calculate Ratio of total intensity of STAT1 signal in DAPI region over STAT1 signal outside of DAPI region', 'Multiply 65535 to match with original image intensity']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
    Name the output measurement:STAT1_TotalRatio
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Math_STAT1_TotalDAPI
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_STAT1_TotalNonDAPI
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:20|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notes:['Calculate Ratio of mean intensity of STAT1 signal in DAPI region over STAT1 signal outside of DAPI region', 'Multiply 65535 to match with original image intensity']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
    Name the output measurement:STAT1_MeanRatio
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Math_STAT1_MeanDAPI
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Math_STAT1_MeanNonDAPI
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:21|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notes:['Export data to CSV file']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Measurements
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Math_STAT1_MeanRatio,Image|Math_STAT1_TotalDAPI,Image|Math_STAT1_Mean,Image|Math_STAT1_TotalNonDAPI,Image|Math_STAT1_TotalRatio,Image|Math_STAT1_MeanNonDAPI,Image|Math_STAT1_Total,Image|Math_STAT1_MeanDAPI,Image|Metadata_Sample
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:STAT1_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
